PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001', 'rekruttert av': ''}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1200]
  expName = lexicaldecision
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Routines
  Routine trial
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = +
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    KeyboardComponent resp
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1
      storeCorrect = True
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    TextComponent stimulus
      letterHeight = 0.1
      startVal [time (s)] = 1
      text [set every repeat] = $stim
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    TextComponent arrow_keys
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = <-- non-ord     ord -->
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  Routine intro
    TextComponent introtekst
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        I denne oppgaven skal du avgjøre om det du ser på skjermen er et ord i norsk eller ikke.
        Dersom du mener det du ser er et norsk ord, trykker du piltasten til høyre.
        Dersom det du ser ikke er et ord, trykker du piltasten til venstre.
        Prøv å svar så raskt du kan.

        Trykk mellomromstasten for å fortsette.

        Lykke til!
    KeyboardComponent key_resp
      allowedKeys = 'left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine avslutning
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 5.0
      text = Takk for innsatsen!
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Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = experimental_trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stim', 'Briller'), ('type', 'simplex'), ('corrAns', 'right'), ('info', 'HiIMG-HiPND')]),
      OrderedDict([('stim', 'Bøtte'), ('type', 'simplex'), ('corrAns', 'right'), ('info', 'HiIMG-HiPND')]),
      OrderedDict([('stim', 'Gate'), ('type', 'simplex'), ('corrAns', 'right'), ('info', 'HiIMG-HiPND')]),
      OrderedDict([('stim', 'Kjeller'), ('type', 'simplex'), ('corrAns', 'right'), ('info', 'HiIMG-HiPND')]),
      OrderedDict([('stim', 'Pose'), ('type', 'simplex'), ('corrAns', 'right'), ('info', 'HiIMG-HiPND')]),
      OrderedDict([('stim', 'Pære'), ('type', 'simplex'), ('corrAns', 'right'), ('info', 'HiIMG-HiPND')]),
      OrderedDict([('stim', 'Skole'), ('type', 'simplex'), ('corrAns', 'right'), ('info', 'HiIMG-HiPND')]),
      OrderedDict([('stim', 'Tønne'), ('type', 'simplex'), ('corrAns', 'right'), ('info', 'HiIMG-HiPND')]),
      OrderedDict([('stim', 'Flakse'), ('type', 'simplex'), ('corrAns', 'right'), ('info', 'HiIMG-LoPND')]),
      OrderedDict([('stim', 'Genser'), ('type', 'simplex'), ('corrAns', 'right'), ('info', 'HiIMG-LoPND')]),
      OrderedDict([('stim', 'Kråke'), ('type', 'simplex'), ('corrAns', 'right'), ('info', 'HiIMG-LoPND')]),
      OrderedDict([('stim', 'Kaffe'), ('type', 'simplex'), ('corrAns', 'right'), ('info', 'HiIMG-LoPND')]),
      OrderedDict([('stim', 'Pensel'), ('type', 'simplex'), ('corrAns', 'right'), ('info', 'HiIMG-LoPND')]),
      OrderedDict([('stim', 'Tavle'), ('type', 'simplex'), ('corrAns', 'right'), ('info', 'HiIMG-LoPND')])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
    Routine trial
  LoopTerminator trials
  Routine avslutning
